import ij.IJ;
import ij.ImagePlus;
import ij.WindowManager;
import java.io.File;
import loci.plugins.LociExporter;
import loci.plugins.out.Exporter;

String requireEnvironment(String name) {
    String value = System.getenv(name);
    if (value == null || value.isEmpty()) {
        throw new RuntimeException("Environment variable '" + name + "' is not set.");
    }
    if (value.indexOf(';') >= 0) {
        throw new RuntimeException("Environment variable '" + name + "' must not contain ';'.");
    }
    return value;
}

String pair(String key, String value) {
    return key + "=" + value;
}

print("==============================================================");
print("Starting fiji_grid_collection_stitch.bsh...");

String INPUT_DIR = requireEnvironment("INPUT_DIR");
String GRID_X = requireEnvironment("GRID_X");
String GRID_Y = requireEnvironment("GRID_Y");
String FIRST_INDEX = requireEnvironment("FIRST_INDEX");
String OUTPUT_NAME = requireEnvironment("OUTPUT_NAME");
String STITCH_PATTERN = requireEnvironment("STITCH_PATTERN");
String LAYOUT_FILE = requireEnvironment("LAYOUT_FILE");
String OUTPUT_TEXTFILE_NAME = requireEnvironment("OUTPUT_TEXTFILE_NAME");
String REGRESSION_THRESHOLD = requireEnvironment("REGRESSION_THRESHOLD");
String MAX_AVG_DISPLACEMENT_THRESHOLD = requireEnvironment("MAX_AVG_DISPLACEMENT_THRESHOLD");
String ABSOLUTE_DISPLACEMENT_THRESHOLD = requireEnvironment("ABSOLUTE_DISPLACEMENT_THRESHOLD");
String FUSION_METHOD = requireEnvironment("FUSION_METHOD");
String COMPUTE_OVERLAP = requireEnvironment("COMPUTE_OVERLAP");
String SUBPIXEL_ACCURACY = requireEnvironment("SUBPIXEL_ACCURACY");
String COMPUTATION_PARAMETERS = requireEnvironment("COMPUTATION_PARAMETERS");
String IMAGE_OUTPUT = requireEnvironment("IMAGE_OUTPUT");
String OUTPUT_DIRECTORY = requireEnvironment("OUTPUT_DIRECTORY");
String SAVE_FORMAT = requireEnvironment("SAVE_FORMAT");
String SCRIPT_DIR = requireEnvironment("SCRIPT_DIR");

String args = pair("input_dir", INPUT_DIR) + ";" +
    pair("grid_x", GRID_X) + ";" +
    pair("grid_y", GRID_Y) + ";" +
    pair("first_index", FIRST_INDEX) + ";" +
    pair("output_name", OUTPUT_NAME) + ";" +
    pair("stitch_pattern", STITCH_PATTERN) + ";" +
    pair("layout_file", LAYOUT_FILE) + ";" +
    pair("output_textfile_name", OUTPUT_TEXTFILE_NAME) + ";" +
    pair("regression_threshold", REGRESSION_THRESHOLD) + ";" +
    pair("max_avg_displacement_threshold", MAX_AVG_DISPLACEMENT_THRESHOLD) + ";" +
    pair("absolute_displacement_threshold", ABSOLUTE_DISPLACEMENT_THRESHOLD) + ";" +
    pair("fusion_method", FUSION_METHOD) + ";" +
    pair("compute_overlap", COMPUTE_OVERLAP) + ";" +
    pair("subpixel_accuracy", SUBPIXEL_ACCURACY) + ";" +
    pair("computation_parameters", COMPUTATION_PARAMETERS) + ";" +
    pair("image_output", IMAGE_OUTPUT) + ";" +
    pair("output_directory", OUTPUT_DIRECTORY) + ";" +
    pair("save_format", SAVE_FORMAT);

mpicbg.stitching.GlobalOptimization.ignoreZ = true;
print("Set mpicbg.stitching.GlobalOptimization.ignoreZ = true");
print("Arguments: " + args);

String macroPath = SCRIPT_DIR + "/fiji_grid_collection_stitch.ijm";
File macroFile = new File(macroPath);
if (!macroFile.exists()) {
    throw new RuntimeException("Macro file not found: " + macroPath);
}

print("Running macro script: " + macroPath);
IJ.runMacroFile(macroPath, args);
print("Finished running macro script.");

if (SAVE_FORMAT.equals("ome_tiff") || SAVE_FORMAT.equals("ome_bigtiff")) {
    ImagePlus projection = WindowManager.getCurrentImage();
    if (projection == null) {
        throw new RuntimeException("No current 2D projection is available for OME export.");
    }

    String extension = SAVE_FORMAT.equals("ome_tiff") ? ".ome.tif" : ".ome.btf";
    String outputPath = OUTPUT_DIRECTORY + "/" + OUTPUT_NAME + "_2d_Fiji" + extension;
    LociExporter plugin = new LociExporter();
    plugin.arg = "outfile=[" + outputPath + "] windowless=true compression=Uncompressed saveRoi=false";
    Exporter exporter = new Exporter(plugin, projection);
    exporter.run();

    File outputFile = new File(outputPath);
    if (!outputFile.isFile() || outputFile.length() == 0) {
        throw new RuntimeException("Bio-Formats export failed: " + outputPath);
    }
    print("Saved 2D OME projection: " + outputPath);
}

while (WindowManager.getImageCount() > 0) {
    ImagePlus openImage = WindowManager.getCurrentImage();
    if (openImage == null) break;
    openImage.changes = false;
    openImage.close();
}
